PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Object_Based_Attention
  keyboardBackend = ioHub
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Routines
  Routine Routine_2
    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent line_1_R2
      fillColor = white
      ori = 180
      pos = (0, -50)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_2_R2
      fillColor = white
      ori = 180
      pos = (0, 50)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent prob_2
      fillColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = (pb, p)
      shape = rectangle
      size = (10, 10)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent target_h
      fillColor = -1.0000, 0.0824, -1.0000
      pos [set every repeat] = (target, target_2)
      shape = rectangle
      size = (10, 10)
      startVal [time (s)] = 2.5
      units = pix
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    KeyboardComponent key_resp_2
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      storeCorrect = True
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  Routine Routine_1
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent line_1
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_2
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent prob
      fillColor = 0.0000, 0.0000, 0.0000
      ori = 90
      pos [set every repeat] = (pb, p)
      shape = rectangle
      size = (10, 10)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent target_v
      fillColor = -1.0000, 0.0824, -1.0000
      ori = 90
      pos [set every repeat] = (target, target_2)
      shape = rectangle
      size = (10, 10)
      startVal [time (s)] = 2.5
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      storeCorrect = True
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = con_R1_v.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'pb': 50, 'p': 60, 'target': 50, 'target_2': 60, 'corr_resp': 'c', 'trial': 'valid', 'target_location': 'same_ob', 'condition': 'vertical'},
        {'pb': 50, 'p': 60, 'target': 50, 'target_2': -60, 'corr_resp': 'v', 'trial': 'invalid', 'target_location': 'same_ob', 'condition': 'vertical'},
        {'pb': 50, 'p': 60, 'target': -50, 'target_2': 60, 'corr_resp': 'z', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'vertical'},
        {'pb': 50, 'p': 60, 'target': -50, 'target_2': -60, 'corr_resp': 'x', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'vertical'},
        {'pb': 50, 'p': -60, 'target': 50, 'target_2': 60, 'corr_resp': 'c', 'trial': 'invalid', 'target_location': 'same_ob', 'condition': 'vertical'},
        {'pb': 50, 'p': -60, 'target': 50, 'target_2': -60, 'corr_resp': 'v', 'trial': 'valid', 'target_location': 'same_ob', 'condition': 'vertical'},
        {'pb': 50, 'p': -60, 'target': -50, 'target_2': 60, 'corr_resp': 'z', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'vertical'},
        {'pb': 50, 'p': -60, 'target': -50, 'target_2': -60, 'corr_resp': 'x', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'vertical'},
        {'pb': -50, 'p': 60, 'target': 50, 'target_2': 60, 'corr_resp': 'c', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'vertical'},
        {'pb': -50, 'p': 60, 'target': 50, 'target_2': -60, 'corr_resp': 'v', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'vertical'}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
      Routine Routine_1
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = con_R2_h.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'pb': 60, 'p': 50, 'target': 60, 'target_2': 50, 'corr_resp': 'x', 'trial': 'valid', 'target_location': 'same_ob', 'condition': 'horizontal'},
        {'pb': 60, 'p': 50, 'target': -60, 'target_2': 50, 'corr_resp': 'z', 'trial': 'invalid', 'target_location': 'same_ob', 'condition': 'horizontal'},
        {'pb': 60, 'p': 50, 'target': 60, 'target_2': -50, 'corr_resp': 'v', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'horizontal'},
        {'pb': 60, 'p': 50, 'target': -60, 'target_2': -50, 'corr_resp': 'c', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'horizontal'},
        {'pb': -60, 'p': 50, 'target': 60, 'target_2': 50, 'corr_resp': 'x', 'trial': 'invalid', 'target_location': 'same_ob', 'condition': 'horizontal'},
        {'pb': -60, 'p': 50, 'target': -60, 'target_2': 50, 'corr_resp': 'z', 'trial': 'valid', 'target_location': 'same_ob', 'condition': 'horizontal'},
        {'pb': -60, 'p': 50, 'target': 60, 'target_2': -50, 'corr_resp': 'v', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'horizontal'},
        {'pb': -60, 'p': 50, 'target': -60, 'target_2': -50, 'corr_resp': 'c', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'horizontal'},
        {'pb': 60, 'p': -50, 'target': 60, 'target_2': 50, 'corr_resp': 'x', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'horizontal'},
        {'pb': 60, 'p': -50, 'target': -60, 'target_2': 50, 'corr_resp': 'z', 'trial': 'invalid', 'target_location': 'diff_ob', 'condition': 'horizontal'}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
      Routine Routine_2
    LoopTerminator trials_2
  LoopTerminator trials_3
